OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
0x790d75b8 = Nick Carey
0x9f5c4075 = TrainingDataAquisition
Comment
  Figuring out how to specify targets to the P300 Identifier Stimulator.

  P300 Identifier Stimulator can only handle one target.  It has a set of stims, starting from
  the base and extending to 'number of objects', and it only knows which stim is a 'target'
  based on the incoming input stream of stims.  Unclear how long it even remembers that
  a specified stim is a target.

  Temporary solution: clock stim will repeatedly blast the single target stim to P300
  Identifier Stimulator.

  Hacked solution: swap out the target image file between repititions to get more target
  examples.

Launch => #0
  Lua Script = ${Player_ScenarioDirectory}/TrainingConfig/p300-HiddenCube-training-launch.lua
  Stimulation To Send = OVTK_StimulationId_Label_00
  Time To Send = 10
Clock stimulator => #1
  Interstimulation interval (in sec) = 2
  Stimulation = OVTK_StimulationId_Label_08
Incoming stimulations=#0, Target Stimulations=#1 -> P300 Identifier Stimulator
  Start stimulation = OVTK_StimulationId_Label_00
  Stimulation base = OVTK_StimulationId_Label_01
  Number of identifiable objects = 8
  Percent of repetitions containing the target = 80
  Number of repetitions = 100
  Number of trials = 2
  Flash duration (in sec) = 0.25
  No flash duration (in sec) = 0.05
  Inter-repetition delay (in sec) = 1
  Inter-trial delay (in sec) = 3
-> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = D:/Workspace/HiddenCubeImages_Lalit/Target/01.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = D:/Workspace/HiddenCubeImages_Lalit/Target/02.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = D:/Workspace/HiddenCubeImages_Lalit/Target/03.png
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = D:/Workspace/HiddenCubeImages_Lalit/Target/04.png
  Stimulation 4 = OVTK_StimulationId_Label_04
  Cue Image 5 = D:/Workspace/HiddenCubeImages_Lalit/Target/05.png
  Stimulation 5 = OVTK_StimulationId_Label_05
  Cue Image 6 = D:/Workspace/HiddenCubeImages_Lalit/Target/06.png
  Stimulation 6 = OVTK_StimulationId_Label_06
  Cue Image 7 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Stimulation 7 = OVTK_StimulationId_Label_07
  Cue Image 8 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Stimulation 8 = OVTK_StimulationId_Label_08
  0x8d21ff41 = ${Player_ScenarioDirectory}/TrainingConfig/TrainingSetVisualizationConfig.txt

Acquisition client => #4
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#4.Signal stream -> Channel Selector "!ACC0;ACC1;ACC2;Packet Counter;Trigger" => #5
  Channel List = ACC0;ACC1;ACC2;Packet Counter;Trigger
  Action = Reject
  Channel Matching Method = Smart
Input Signal=#5, Input Stimulations=#4.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/TrainingSignals/trainingAquisitionLong.ov
  Use compression = false
#4.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
