OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Online Use
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Switch from file reader
  to Acquisiton client to use it online
Comment
  Overview

  This scenario can be used online once the
  spatial filter and the classifiers are trained.
  The Target Letter Generation
  box still proposes some targets in order to
  eventually train the spatial filter / classifier
  again, but you may want to disconnect that box
  in order to have a real free time use of
  the speller.

  The flash sequence starts automatically after 20 sec.

  You will then be presented a blue letter that
  you have to focus on, followed by a 12 times
  flashing sequence of the whole grid. The detected
  letter will be presented in green. This will be repeated
  10 times.

  If the performance of the system does not fit your
  requirements, just run 2-train-xDAWN and 3-train-classifier
  scenarios again on the data you just recorded.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The preprocessing of the signal is
  performed here...

  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor
Comment
  You can configure the Flashing Sequence
  and the Target Letter Generation in order to
  instruct the subject to spell a specific word.

  Set the target word in the Lua Stimulator (e.g. "openvibe")
  and adapt the number of trials in the P300 Speller Stimulator
  (e.g. 8 trials for the 8 letters in "openvibe")

  Note: If the number of letter in the chosen word does not match
  the number of trial, you won't be able to train xDAWN and
  the classifier on the recorded data.
Comment
  The stimulation part of the scenario is
  similar to scenario 1-acquisition.

  If you keep the Target Letter Generation
  box, you will be able to train the algorithms
  again on the recorded data.

0x341d3912 Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> 0x341d3912 Identity => #1
#1.Output stream 2 -> 0x341d3912 Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> 0x341d3912 Signal Decimation
  Decimation factor = 4
-> 0x341d3912 xDAWN Spatial Filter => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-spatial-filter.cfg
Input signal=#4, Input stimulations=#1.Output stream 3 -> 0x341d3912 Stimulation based epoching
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
-> 0x341d3912 Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> 0x341d3912 Feature aggregator => #7
Features=#7 -> 0x341d3912 Classifier processor => #8
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2, Input stream 3=#1.Output stream 3 -> 0x341d3912 Generic stream writer
  Filename = ${Player_ScenarioDirectory}/OnlineSignals/p300-xdawn-hiddencube-online-[$core{date}-$core{time}].ov
  Use compression = false
#1.Output stream 3 -> 0x341d3912 Identity => #10
New input[0]=#8.Labels, New input[1]=#10 -> 0x341d3912 P300 accumulator
  Lua Script = ${Player_ScenarioDirectory}/OnlineConfig/p300-HiddenCube-accumulator.lua
  Image Stimulation Base = OVTK_StimulationId_Label_01
  Number of Images per Trial = 10
  Segment start = OVTK_StimulationId_TrialStart
  Segment stop = OVTK_StimulationId_TrialStop
  Votes buffer file location = ${Player_ScenarioDirectory}/../buffers/CurrentImages/votes.txt
#10 -> 0x341d3912 Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause

File Que Launch => #13
  Lua Script = ${Player_ScenarioDirectory}/OnlineConfig/p300-HiddenCube-FileQue-launch.lua
  Stimulation to send = OVTK_StimulationId_Label_00
  Time to send = 5
  Que File = ${Player_ScenarioDirectory}/../buffers/CurrentImages/isImageSetReady.txt
Incoming stimulations=#13 -> P300 Identifier Stimulator
  Start stimulation = OVTK_StimulationId_Label_00
  Stimulation base = OVTK_StimulationId_Label_01
  Number of identifiable objects = 10
  Percent of repetitions containing the target = 100
  Number of repetitions = 5
  Number of trials = 1
  Flash duration (in sec) = 0.2
  No flash duration (in sec) = 0.125
  Inter-repetition delay (in sec) = 2
  Inter-trial delay (in sec) = 5
-> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${Player_ScenarioDirectory}/../buffers/TrainingImages/Distractors/01.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/02.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/03.png
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/04.png
  Stimulation 4 = OVTK_StimulationId_Label_04
  Cue Image 5 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/05.png
  Stimulation 5 = OVTK_StimulationId_Label_05
  Cue Image 6 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/06.png
  Stimulation 6 = OVTK_StimulationId_Label_06
  Cue Image 7 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Stimulation 7 = OVTK_StimulationId_Label_07
  Cue Image 8 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Stimulation 8 = OVTK_StimulationId_Label_08
  Cue Image 9 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/09.png
  Stimulation 9 = OVTK_StimulationId_Label_09
  Cue Image 10 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/10.png
  Stimulation 10 = OVTK_StimulationId_Label_0A
  0x8d21ff41 = ${Player_ScenarioDirectory}/OnlineConfig/OnlineCueImgConfig.txt
